<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialEncoder</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_Encoder.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeStep.ElapsedTime</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialID</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TrialID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as TrialID,
Item3 as ElapsedTime,
Item2 as Encoder)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Prefix</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>_Responses.csv</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="FileName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialResponse</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeStep.ElapsedTime</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="SubscribeSubject">
        <Name>TrialID</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TrialID</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as TrialID,
Item3 as ElapsedTime,
Item2 as Response)</scr:Expression>
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="9" Label="Source2" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="12" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="9" Label="Source3" />
      <Edge From="6" To="10" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="25" Label="Source2" />
      <Edge From="16" To="22" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="22" Label="Source3" />
      <Edge From="19" To="23" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>