<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>LogTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Format">
              <Format>Data/{2}/{0}_{1}_{2}/{0}_{1}_{2}_{3:D5}</Format>
              <Selector>ExperimentDate,ExperimentNumber,AnimalID,TrialID</Selector>
            </Expression>
            <Expression xsi:type="AsyncSubject">
              <Name>Prefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialMetadata</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Prefix</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>.csv</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName />
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>false</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CloseTrial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Behavior</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MessageBytes</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Prefix</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="StringProperty">
                <Value>_Behavior.bin</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Suffix>None</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="8" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>