<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>StimulusResponse</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Render</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Render2D</Name>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:LastOrDefault" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialResponse</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>OnsetResponse</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>CountResponses</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LickThreshold</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>GreaterThanOrEqual</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>ResponseDuration</scr:Name>
              <scr:Expression>TimeSpan.FromMilliseconds(ResponseDuration)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialParameters</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>ResponseStart</scr:Name>
              <scr:Expression>TimeSpan.FromMilliseconds(ResponseStart)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="22" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="27" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>